OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.5
-> Channel Selector => #2
  Channel List = 1:3
  Action = Select
  Channel Matching Method = Smart
-> Signal Differential/Integral => #3
  Operation = Differential
  Order = 1
Signal=#3 -> Signal display "differential"
  Time Scale = 5
  Display Mode = Scroll
  EEG display = false
  Manual Vertical Scale = true
  Vertical Scale = 500
#3 -> Simple DSP "x^2" => #5
  Equation = x*x
Signal=#5 -> Signal display "power"
  Time Scale = 5
  Display Mode = Scroll
  EEG display = true
  Manual Vertical Scale = true
  Vertical Scale = 100000
Signal=#2, Stimulations=#0.Stimulations -> Signal display "1"
  Time Scale = 5
  Display Mode = Scroll
  EEG display = true
  Manual Vertical Scale = true
  Vertical Scale = 1000
QRS threshold 2 => #8
  Clock frequency (Hz) = 64
  Script = ${__volatile_ScenarioDir}/python_control_GUI_mono.py
  Sampling frequency = 250
  Generated epoch sample count = 64
  min value = 5000
  max value = 10000
  window title = QRS level 2
QRS threshold 1 => #9
  Clock frequency (Hz) = 64
  Script = ${__volatile_ScenarioDir}/python_control_GUI_mono.py
  Sampling frequency = 250
  Generated epoch sample count = 64
  min value = 5000
  max value = 10000
  window title = QRS level 1
0xc67a01dc QRS threshold 3 => #10
  Clock frequency (Hz) = 64
  Script = ${__volatile_ScenarioDir}/python_control_GUI_mono.py
  Sampling frequency = 250
  Generated epoch sample count = 64
  min value = 5000
  max value = 10000
  window title = QRS level 3
Input 1=#9, Input 2=#8, Input 3=#10 -> Signal Merger => #11
Input - A=#5, Input - B=#11 -> Simple DSP "if > max" => #12
  Equation = (a > b) - 0.5
Signal=#12 -> Signal display "trigger"
  Time Scale = 5
  Display Mode = Scroll
  EEG display = false
  Manual Vertical Scale = true
  Vertical Scale = 3
#12 -> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#12 -> TCP Writer
  Port = 5678
  Stimulus output = Raw
